PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Tutorial _3
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5:
            num_Distractor = 10
            thisExp.addData('num_Distractor', num_Distractor)
        else:
            num_Distractor = 5
            thisExp.addData('num_Distractor', num_Distractor)

        Distractors = []

        for i in range(num_Distractor):

            Distractor = visual.TextStim(win=win, name='Distractor',
                text='L',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(1.360),
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=0.0);


            Distractors.append(Distractor)


        for Distractor in Distractors:
            Distractor.setAutoDraw(True)
      End Routine:
        for Distractor in Distractors:
            Distractor.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
